PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = $[.8,.8,.8]
  expName = mf_amp
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Routines
  Routine trial
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $category
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import random
        full_indices = list(range(0,19))
        care_indices = list(range(0,9))
        harm_indices = list(range(10,19))

        care_indices_a = random.sample(care_indices, 5)
        harm_indices_a = random.sample(harm_indices, 5)
        indices_a = care_indices_a + harm_indices_a
        indices_b = list(set(full_indices).difference(indices_a))
  Routine trial_2
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $category
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
  Routine instr_1
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Moving on...
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $indices_a
    conditionsFile = words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'paint brush'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'red fox'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'volley ball'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'plate'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'puma'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'lantern'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'daisy'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'notebook'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'flash light'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'barrel'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'ping pong paddle'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'tent'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'antelope'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'apple'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'lemon'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'hat'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'desktop computer'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'sun glasses'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'drying machine'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'egg'), ('corr_ans', 'left')])]
    Routine trial
  LoopTerminator trials
  Routine instr_1
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = $indices_b
    conditionsFile = words.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'paint brush'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'red fox'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'volley ball'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'plate'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'puma'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'lantern'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'daisy'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'notebook'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'flash light'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'barrel'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'ping pong paddle'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'tent'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'antelope'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'apple'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'lemon'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'hat'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'desktop computer'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'sun glasses'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'drying machine'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'egg'), ('corr_ans', 'left')])]
    Routine trial_2
  LoopTerminator trials_2
